PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = attempt
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent image
      durationEstim = 10000000000
      startVal [time (s)] = 0.0
      image = "tglab/images/"  + $name + $verb + $color + $object
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 10000000000
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tglab/images.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [{'color': u'Red', 'verb': u'On', 'names': u'mountie', 'object': u'Stool'},
      {'color': u'Red', 'verb': u'With', 'names': u'hunter', 'object': u'Stool'},
      {'color': u'Red', 'verb': u'On', 'names': u'hunter', 'object': u'Stool'},
      {'color': u'Blue', 'verb': u'Nextto', 'names': u'hunter', 'object': u'Stool'},
      {'color': u'Red', 'verb': u'On', 'names': u'mountie', 'object': u'Skateboard'}]
    Routine trial
  LoopTerminator trials
