PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = text experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text = Welcome to the Trueswell Gleitman Lab!
      stopVal [duration (s)] = 1.0
      pos = [0.25, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = /test.jpeg
      size = [0.5, 0.5]
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Flow
  Routine trial
